PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1.000,-1.000,-0.498]
  expName = pvt
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        react_clock = clock.Clock()
        rt = 0
        s_rt = ""
      Begin Routine:
        react_clock.reset()
      Each Frame:
        rt = react_clock.getTime()
        s_rt = "{0:d}".format(int(1000*rt))
      End Routine:
        # Need one last winFlip to include the final time.
        # Tell the components to draw themselves (PsychoPY turns this
        # off when continueRoutine = False.
        for thisComponent in trialComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)
        win.flip()
        for thisComponent in trialComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
    PolygonComponent rt_rect_active
      fillColor = $rt_rect_empty.fillColor
      shape = rectangle
      size = (rt_rect_empty.width, rt_rect_empty.height)
      startVal [time (s)] = 0.0
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    TextComponent rt_text_active
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $s_rt
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    KeyboardComponent rt_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine random_wait
    PolygonComponent rt_rect_empty
      fillColor = $[1.000,-1.000,-1.000]
      shape = regular polygon...
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $1.0+8*random()
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  Routine thanks
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = All done! Thanks for taking part.
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        When digits appear in the red box, hit the space bar as quickly as possible.

        Hit the space bar now to start the test.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine display_rt
    PolygonComponent rt_rect_final
      fillColor = $rt_rect_empty.fillColor
      shape = rectangle
      size = (rt_rect_empty.width, rt_rect_empty.height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent rt_text_final
      color = $rt_text_active.color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = "{0:d}".format(int(1000*$rt))
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  Routine check_loop
    CodeComponent check_loop_time
      Code Type = Py
      Begin Experiment:
        loop_time = 1*60  #Total time in seconds that we'll take samples. Last trial may run over this time.
      Begin Routine:
        if loop_clock.getTime() >= loop_time:
            trials.finished=True
  Routine initialize_loop
    CodeComponent initialize_loop_clock
      Code Type = Py
      Begin Routine:
        loop_clock = clock.Clock()
Flow
  Routine instructions
  Routine initialize_loop
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10000
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    Routine random_wait
    Routine trial
    Routine display_rt
    Routine check_loop
  LoopTerminator trials
  Routine thanks
